PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine p1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import serial

        port = serial.Serial("/dev/ttyUSB0", baudrate=115200)
        trigger = int(10)

        win0 = visual.Window(size=(1920, 1080), screen=1, fullscr=True)
        win0.checkTiming=False
        win1 = visual.Window(size=(1920, 1080), screen=2, fullscr=True)
        win1.checkTiming=False

        kb0 = hardware.keyboard.Keyboard(deviceName="kb0", device=0)
        kb1 = hardware.keyboard.Keyboard(deviceName="kb1", device=1)

        active_txt = visual.TextStim(win0, text='Close your eyes and1 press the space bar at the same time.\n' +
        'Count to 10  in your head, and then open your eyes release the spacebar')
        wait_txt = visual.TextStim(win1, text='The other player is about to close his eyes')
        polygon = visual.Polygon(win0, pos = (-0.8, 0.8), size = 1.5, edges=4)
        polygon_waiting = visual.Polygon(win1, pos = (-0.8, 0.8), size = 1.5, edges=4)

        win0.flip()
        win1.flip()

        import random
        is_left = random.choice([False, True])
      Begin Routine:
        wait_txt.setText('The other player is about to close his eyes')

        if is_left:
            kb0.waitKeys(keyList=['space'])
            active_txt.win = win0
            wait_txt.win = win1
            polygon.win = win0
            polygon_waiting.win=win1
        else:
            kb1.waitKeys(keyList=['space'])
            active_txt.win = win1
            wait_txt.win = win0
            polygon.win = win1
            polygon_waiting.win=win0

        wait_txt.setAutoDraw(True)
        active_txt.setAutoDraw(True)
        polygon.setAutoDraw(False)
        polygon_waiting.setAutoDraw(False)
        win0.flip()
        win1.flip()
        clicked = False
      Each Frame:
        if is_left:
            hold_keys = kb0.getKeys(['space'], waitRelease = False)
            press_keys = kb0.getKeys(['space'], waitRelease = True)
        else:
            hold_keys = kb1.getKeys(['space'], waitRelease = False)
            press_keys = kb1.getKeys(['space'], waitRelease = True)

        if press_keys:
            print("finish")
            continueRoutine = False

        if  not clicked and hold_keys:
            print("clicked")
            port.write(trigger.to_bytes(1, 'big'))
            clicked = True
            polygon.draw()
            polygon_waiting.draw()
            wait_txt.setText('The other player closed his eyes')
            win0.flip()
            win1.flip()
      End Routine:
        print("end")
        active_txt.setAutoDraw(False)
        wait_txt.setAutoDraw(False)
        polygon.setAutoDraw(False)

        win0.flip()
        win1.flip()

        is_left = not is_left
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine p2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine p1
  LoopTerminator trials
